CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Originals
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Originals
    Conversion method:Split
    Image type:Channels
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    Channel count:1
    Channel number:1
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    Image name:GCaMP6f

RescaleIntensity:[module_num:6|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
    Select the input image:GCaMP6f
    Name the output image:GCaMP6f_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
Threshold:[module_num:7|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
    Select the input image:GCaMP6f_rescaled
    Name the output image:NoCells
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:2.0
    Lower and upper bounds on threshold:0.2,1
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    Log transform before thresholding?:Yes
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
MaskImage:[module_num:8|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
    Select the input image:GCaMP6f_rescaled
    Name the output image:maskedCells
    Use objects or an image as a mask?:Image
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    Select image for mask:NoCells
    Invert the mask?:Yes

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:maskedCells
    Name the output image:Only_Neurites
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Tubeness
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    Rescale result image:No

Threshold:[module_num:10|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enabled:False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
    Select the input image:Only_Neurites
    Name the output image:Thresholded_Neurites
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:3
    Lower and upper bounds on threshold:0,0.1
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    Log transform before thresholding?:No
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
Threshold:[module_num:11|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
    Select the input image:maskedCells
    Name the output image:Thresholded_neurites_no_enhance
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.025,1
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:12|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enabled:False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
    Select the input image:Thresholded_Neurites
    Name the output image:Neurites_Skeleton

MorphologicalSkeleton:[module_num:13|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
    Select the input image:Thresholded_neurites_no_enhance
    Name the output image:Skeleton_no_enhance

MeasureImageAreaOccupied:[module_num:14|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Skeleton_no_enhance, Thresholded_neurites_no_enhance
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:Skeleton_no_enhance
    Select method for constructing file names:From image filename
    Select image name for file prefix:Originals
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold_Neurites_Skeleton
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\250606_syn_img_repeats\\CellProfiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Thresholded_neurites_no_enhance
    Select method for constructing file names:From image filename
    Select image name for file prefix:Originals
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold_Neurites_Area
    Saved file format:tiff
    Output file location:Elsewhere...|H:\\250606_syn_img_repeats\\CellProfiler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\250606_syn_img_repeats\\CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Experiment|CellProfiler_Version,Experiment|Pipeline_Pipeline,Experiment|Modification_Timestamp,Image|AreaOccupied_AreaOccupied_Thresholded_neurites_no_enhance,Image|AreaOccupied_AreaOccupied_Skeleton_no_enhance,Image|FileName_Originals
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:GCaMP6f_new_skele
    Overwrite existing files without warning?:No
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